PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH_1
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine Instructions
    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will have to name the objects you see on the screen.
        If the background is red, type the name of the object.
        If the background is blue, say the name of the object out loud.


        Press SPACE to begin!
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating!
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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Flow
  Routine Welcome
  Routine blank500
  Routine Instructions
  Routine blank500
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sequence': 2, 'respModal': 'speak', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim1_Set1', 'correctAns': 'ratón', 'image': 'REPSWITCH1/PICTURE_1.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'T', 'repSwitch': 'repeat', 'stimulus': 'Stim1_Set1', 'correctAns': 'ratón', 'image': 'REPSWITCH1/PICTURE_1.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'F', 'repSwitch': 'filler', 'stimulus': 'Stim1_Set3', 'correctAns': 'nube', 'image': 'REPSWITCH1/PICTURE_599.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim2_Set1', 'correctAns': 'mesa', 'image': 'REPSWITCH1/PICTURE_110.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'T', 'repSwitch': 'repeat', 'stimulus': 'Stim2_Set1', 'correctAns': 'mesa', 'image': 'REPSWITCH1/PICTURE_110.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'F', 'repSwitch': 'filler', 'stimulus': 'Stim2_Set3', 'correctAns': 'miel', 'image': 'REPSWITCH1/PICTURE_610.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim3_Set1', 'correctAns': 'sirena', 'image': 'REPSWITCH1/PICTURE_12.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'T', 'repSwitch': 'switch', 'stimulus': 'Stim3_Set1', 'correctAns': 'sirena', 'image': 'REPSWITCH1/PICTURE_12.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim4_Set1', 'correctAns': 'muñeca', 'image': 'REPSWITCH1/PICTURE_128.png'}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
    Routine ITI
    Routine trial
    Routine blank500
  LoopTerminator trialsREPSWITCH
  Routine Goodbye
